PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = mt_stimuli_recording
  keyboardBackend = ioHub
  runMode = 0
  sortColumns = alphabetical
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Routines
  Routine trial
    RoutineSettingsComponent trial
      forceNonSlip = True
      stopVal [duration (s)] = 5
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    PolygonComponent cue_stim
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = circle
      size = (0.7, 0.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.5
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    PolygonComponent target_stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 4
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent task_msg
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = Active
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    CodeComponent code_trial
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Import necessary module
        from psychopy import core

        # Initialize parameters for the cue
        initial_radius = 0.7  # Starting size of the cue
        final_radius = 0.2    # Final size of the cue
        duration = 2.0        # Time in seconds to shrink
        hold_time = 1.5       # Time in seconds to hold after reaching final size

        cue_started = False    # To track when the cue starts shrinking
        cue_start_time = None  # To store when the cue started shrinking
      Begin Routine:
        cue_started = False
        aa_green_onset = None  # To store when the cue turns green relative to trial onset
        aa_test_onset = None
      Each Frame:
        # Get elapsed time relative to trial onset
        elapsed_time = t  # 't' is automatically provided by PsychoPy

        # Ensure cue_stim is always visible from the start
        cue_stim.autoDraw = True

        # Ensure cue_stim stays black and at full size before 1s
        if elapsed_time < 1.0:
            cue_stim.fillColor = [0, 0, 0]  # Keep it black
            cue_stim.size = (0.7, 0.7)  # Ensure initial size

        # Start shrinking cue_stim after 1s
        elif elapsed_time >= 1.0:
            if not cue_started:
                cue_start_time = elapsed_time  # Record start time of shrinking
                cue_started = True

            # Calculate how much time has passed since shrinking started
            time_passed = elapsed_time - cue_start_time

            # Compute new size
            new_radius = initial_radius - (time_passed / duration) * (initial_radius - final_radius)
            new_radius = max(new_radius, final_radius)  # Ensure it doesn’t go below final size

            # Update cue_stim properties
            cue_stim.size = (new_radius, new_radius)

            # Change color when cue reaches final size and record aa_green_onset
            if new_radius <= final_radius:
                cue_stim.fillColor = [-1.0000, 0.0039, -1.0000]  # Change to green
                if aa_green_onset is None:  # Record green onset time once
                    aa_green_onset = elapsed_time

        # Remove cue_stim after the hold time
        if aa_green_onset is not None and elapsed_time >= aa_green_onset + hold_time:
            cue_stim.autoDraw = False  # Hide cue_stim

        if aa_green_onset is not None:
            thisExp.addData('aa_green_onset', aa_green_onset)  # Store cue turning green onset
    MicrophoneComponent mic_input
      channels = mono
      device = 12
      deviceLabel = audiointerface
      maxSize = 240000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine welcome
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    TextComponent welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Welcome to this experiment
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  Routine instructions
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    TextComponent instructions_message
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment you have two different tasks.

        If the instruction says "Passive" you only have to fixate the moving circle in the middle of the sceen, without doing or saying anything.

        If the instruction says "Active" you are required to produce a short sound (/da/) AFTER the moving cricle reached the size of the inner circle AND the  circle turned green.

        In some trials a sound will be played BEFORE the circle turned green. In this case, still wait until the circle turns green and vocalize /da/ then (in case of Active trials). Try your best to ignore the sound by solely focusing on the circles.
    KeyboardComponent instruction_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    RoutineSettingsComponent ISI
      stopVal [duration (s)] = random.randint(500, 1500)/1000
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    PolygonComponent fixation_cross_ISI
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    conditions:
      [{'trial_type': 'passive_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Passive', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'passive_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Passive', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'active_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Active', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'active_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Active', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'passive_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Passive', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0}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
    Routine ISI
    Routine trial
  LoopTerminator trials
