PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = mt_psam_exp_test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine passive_no_probe
    RoutineSettingsComponent passive_no_probe
      forceNonSlip = True
      stopVal [duration (s)] = 5
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    TextComponent fixation_cross
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Import necessary module
        from psychopy import core

        # Initialize parameters for the cue
        initial_radius = 0.7  # Starting size of the cue
        final_radius = 0.2    # Final size of the cue
        duration = 2.0        # Time in seconds to shrink
        hold_time = 1.5       # Time in seconds to hold after reaching final size

        cue_started = False    # To track when the cue starts shrinking
        cue_start_time = None  # To store when the cue started shrinking
      Begin Routine:
        cue_started = False
        cue_start_time = None
      Each Frame:
        # Get the elapsed time since the routine started
        elapsed_time = t  # 't' is automatically provided by PsychoPy as the time since the start of the routine

        # Hide the cue before 1 second
        if elapsed_time < 1.0:
            cue.fillColor = [0, 0, 0]  # Ensure it stays black
            cue.size = (0.7, 0.7)  # Reset size to initial, in case of flickering
        else:
            # Start drawing the cue after 1 second
            if not cue_started:
                cue_start_time = elapsed_time  # Record the time when the cue starts shrinking
                cue_started = True

            # Calculate how much time has passed since the cue started shrinking
            time_passed = elapsed_time - cue_start_time  # Time since cue started shrinking

            # Calculate the new size based on the elapsed time
            new_radius = initial_radius - (time_passed / duration) * (initial_radius - final_radius)

            # Ensure the radius does not go below the final size
            new_radius = max(new_radius, final_radius)

            # Update the cue's size
            cue.size = (new_radius, new_radius)

            # Change color when the cue reaches the target size
            if new_radius <= final_radius:  # If cue size matches target size
                cue.fillColor = [0, 1, 0]  # Change color to green (using RGB values)

            # Draw the cue only after 1 second and during the hold time
            cue.draw()  # Draw the cue

            # End the routine after holding time
            if (cue.fillColor == [0, 1, 0]).all() and (time_passed >= duration + hold_time):
                continueRoutine = False  # Ends the routine after holding

        # Draw the cue only after 1 second
        if elapsed_time >= 1.0:
            cue.draw()  # Draw the cue if the elapsed time is greater than or equal to 1 second

        # Flip the window to update the frame
        win.flip()
    PolygonComponent cue
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.7, 0.7)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    PolygonComponent target
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = P148067_psam_conds_2025-02-21_12h37.30.270.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'trial': 1, 'type': 'passive'},
      {'trial': 2, 'type': 'active'},
      {'trial': 3, 'type': 'active'},
      {'trial': 4, 'type': 'passive'},
      {'trial': 5, 'type': 'passive'},
      {'trial': 6, 'type': 'active'},
      {'trial': 7, 'type': 'passive'},
      {'trial': 8, 'type': 'passive'},
      {'trial': 9, 'type': 'active'},
      {'trial': 10, 'type': 'active'}]
    Routine passive_no_probe
  LoopTerminator trials
