PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'../data/BIDS/%s/beh/%s_%s_%s' % (f"sub-{int(expInfo['participant']):02d}", f"sub-{int(expInfo['participant']):02d}", "tid_psam_main_experiment", expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tid_psam_main_experiment
  keyboardBackend = ioHub
  runMode = 0
  sortColumns = alphabetical
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Routines
  Routine trial
    RoutineSettingsComponent trial
      forceNonSlip = True
      stopVal [duration (s)] = 5
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    SoundComponent probe_stim
      hamming = False
      sound [set every repeat] = $stim_file
      speakerIndex = 23.0
      startVal [time (s)] = $probe_onset
      stopVal [duration (s)] = $probe_duration
      volume [set every repeat] = probe_intensity
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    ParallelOutComponent probe_marker_port
      address = 0x3ff8
      register = EIO
      startData = $probe_marker
      startVal [time (s)] = $probe_onset
      stopData = 0
      stopVal [duration (s)] = $probe_duration
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent go_port
      address = 0x3ff8
      register = EIO
      startData = 5
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent task_port
      address = 0x3ff8
      register = EIO
      startData = $task_marker
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent cue_stim
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 4
      shape = circle
      size = (0.7, 0.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.5
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    PolygonComponent target_stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 4
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent task_msg
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $task
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    CodeComponent code_trial
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Import necessary module
        from psychopy import core

        # Initialize parameters for the cue
        initial_radius = 0.7  # Starting size of the cue
        final_radius = 0.2    # Final size of the cue
        duration = 2.0        # Time in seconds to shrink
        hold_time = 1.5       # Time in seconds to hold after reaching final size

        cue_started = False    # To track when the cue starts shrinking
        cue_start_time = None  # To store when the cue started shrinking
      Begin Routine:
        cue_started = False
        aa_green_onset = None  # To store when the cue turns green relative to trial onset
        aa_test_onset = None
      Each Frame:
        # Get elapsed time relative to trial onset
        elapsed_time = t  # 't' is automatically provided by PsychoPy

        # Ensure cue_stim is always visible from the start
        cue_stim.autoDraw = True

        # Ensure cue_stim stays black and at full size before 1s
        if elapsed_time < 1.0:
            cue_stim.fillColor = [0, 0, 0]  # Keep it black
            cue_stim.size = (0.7, 0.7)  # Ensure initial size

        # Start shrinking cue_stim after 1s
        elif elapsed_time >= 1.0:
            if not cue_started:
                cue_start_time = elapsed_time  # Record start time of shrinking
                cue_started = True

            # Calculate how much time has passed since shrinking started
            time_passed = elapsed_time - cue_start_time

            # Compute new size
            new_radius = initial_radius - (time_passed / duration) * (initial_radius - final_radius)
            new_radius = max(new_radius, final_radius)  # Ensure it doesn’t go below final size

            # Update cue_stim properties
            cue_stim.size = (new_radius, new_radius)

            # Change color when cue reaches final size and record aa_green_onset
            if new_radius <= final_radius:
                cue_stim.fillColor = [-1.0000, 0.0039, -1.0000]  # Change to green
                if aa_green_onset is None:  # Record green onset time once
                    aa_green_onset = elapsed_time

        # Remove cue_stim after the hold time
        if aa_green_onset is not None and elapsed_time >= aa_green_onset + hold_time:
            cue_stim.autoDraw = False  # Hide cue_stim

        # Track test_stim onset time without modifying its behavior
        if elapsed_time >= 3.0 and aa_test_onset is None:
            aa_test_onset = elapsed_time  # Store exact trial-relative onset time

        # Save aa_test_onset and aa_green_onset to output file at the end of the routine
        if aa_test_onset is not None:
            thisExp.addData('aa_test_onset', aa_test_onset)  # Store test_stim onset

        if aa_green_onset is not None:
            thisExp.addData('aa_green_onset', aa_green_onset)  # Store cue turning green onset
    MicrophoneComponent mic
      channels = mono
      device = 28
      deviceLabel = audiointerface
      maxSize = 240000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = False
      startVal [time (s)] = 2.95
      stopVal [duration (s)] = $rec_duration
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine welcome
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    TextComponent welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Welcome to this experiment
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    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        subject_id = expInfo["participant"]
        subject_id = f"sub-{subject_id.zfill(2)}"
        thisExp.addData("subject_id", subject_id)

        _thisDir2 = os.path.dirname(_thisDir)

        filename_cond = u'data\\BIDS\\stimuli\\%s\\%s_conditions_meta.xlsx' % (subject_id, subject_id) # CHANGED
        conditionsFileName = _thisDir2 + os.sep + filename_cond
        thisExp.addData("conditions", conditionsFileName)
  Routine instructions
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    TextComponent instructions_message
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment you have two different tasks.

        If the instruction says "Passive" you only have to fixate the moving circle in the middle of the sceen, without doing or saying anything.

        If the instruction says "Active" you are required to produce a short sound (/da/) AFTER the moving cricle reached the size of the inner circle AND the  circle turned green.

        In some trials a sound will be played BEFORE the circle turned green. In this case, still wait until the circle turns green and vocalize /da/ then (in case of Active trials). Try your best to ignore the sound by solely focusing on the circles.
    KeyboardComponent instruction_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    RoutineSettingsComponent ISI
      stopVal [duration (s)] = random.randint(500, 1500)/1000
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    PolygonComponent fixation_cross_ISI
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ParallelOutComponent fixation_cross_port
      address = 0x3ff8
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine pause
    RoutineSettingsComponent pause
      skipIf = $skip_pause == 1 
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    KeyboardComponent pause_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent pause_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Kurze Pause.

        Sie können nun kurz pausieren.

        Bitte sprechen und bewegen Sie sich NICHT!

        Die Versuchsleitung wid zu Ihnen sprechen und Ihnen weitere Informationen mitteilen.
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Das Ende des Experiments ist erreicht.

        Bitte bleiben Sie ruhig sitzen und sprechen Sie NICHT.

        Die Versuchsleitung wird Sie über den weiteren Verlauf aufklären.

        Vielen Dank für Ihrer Teilnahme!
Flow
  Routine welcome
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $conditionsFileName
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'probe': 'Yes', 'task': 'Active', 'probe_onset_cat': 'Early', 'probe_type': 'Normal', 'probe_onset': 2.8, 'probe_intensity': 1, 'stim_file': 'C:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\BIDS\\stimuli\\sub-99\\sub-99_normal_probe.wav', 'probe_duration': 0.08, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Active', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Passive', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Active', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Passive', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'Yes', 'task': 'Active', 'probe_onset_cat': 'Late', 'probe_type': 'Normal', 'probe_onset': 2.9, 'probe_intensity': 1, 'stim_file': 'C:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\BIDS\\stimuli\\sub-99\\sub-99_normal_probe.wav', 'probe_duration': 0.08, 'subj': 'sub-99'}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
      Routine ISI
      Routine trial
    LoopTerminator trials
    Routine pause
  LoopTerminator blocks
  Routine end
