PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'../data/BIDS/%s/beh/%s_%s_%s' % (f"sub-{int(expInfo['participant']):02d}", f"sub-{int(expInfo['participant']):02d}", "tid_psam_main_experiment", expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tid_psam_main_experiment_ALTERNATIVE_NO_CIRCLE
  keyboardBackend = ioHub
  runMode = 0
  sortColumns = alphabetical
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Routines
  Routine trial
    RoutineSettingsComponent trial
      forceNonSlip = True
      stopVal [duration (s)] = 5
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    SoundComponent probe_stim
      hamming = False
      sound [set every repeat] = $stim_file
      speakerIndex = 23.0
      startVal [time (s)] = $probe_onset
      stopVal [duration (s)] = $probe_duration
      volume [set every repeat] = probe_intensity
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    ParallelOutComponent probe_marker_port
      address = 0x3ff8
      register = EIO
      startData = $probe_marker
      startVal [time (s)] = $probe_onset
      stopData = 0
      stopVal [duration (s)] = $probe_duration
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent go_port
      address = 0x3ff8
      register = EIO
      startData = 5
      startVal [time (s)] = 3
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = True
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    ParallelOutComponent task_port
      address = 0x3ff8
      register = EIO
      startData = $task_marker
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = True
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    PolygonComponent wait_stim
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent go_stim
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
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    TextComponent task_msg
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text [set every repeat] = $task
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    CodeComponent code_trial
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Import necessary module
        from psychopy import core
    MicrophoneComponent mic
      channels = mono
      device = 28
      deviceLabel = audiointerface
      maxSize = 240000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = False
      startVal [time (s)] = 2.95
      stopVal [duration (s)] = $rec_duration
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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  Routine welcome
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    TextComponent welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Wilkommen!
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    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        subject_id = expInfo["participant"]
        subject_id = f"sub-{subject_id.zfill(2)}"
        thisExp.addData("subject_id", subject_id)

        _thisDir2 = os.path.dirname(_thisDir)

        filename_cond = u'data\\BIDS\\stimuli\\%s\\%s_conditions_meta.xlsx' % (subject_id, subject_id) # CHANGED
        conditionsFileName = _thisDir2 + os.sep + filename_cond
        thisExp.addData("conditions", conditionsFileName)
  Routine instructions
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    TextComponent instructions_message
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Achten Sie bitte erneut darauf sich so wenig wie möglich zu bewegen. Vor Ihnen befindet sich weiterhin ein Monitor. Der Ablauf bleibt dem vorherigen sehr ähnlich. Auf dem Monitor wird zunächst ein „+“ dargestellt. Anschließend wird Ihnen ein Kreis präsentiert, in dem sich eine Instruktion befindet. Nach einiger Zeit wechselt die Füllfarbe des Kreises zu Grün. Bitte beachten Sie in diesem Teil des Experiments die Instruktion genau.

        Im Falle der Instruktion „/ga/“ ist es wie zuvor Ihre Aufgabe eine kurze Silbe („ga“) zu produzieren, sobald der Kreis grün wurde. Nutzen Sie bitte die Zeit zwischen Erscheinen des Kreises und dem grün-werden dessen zur Vorbereitung auf das Sprechen. Achten Sie darauf erst zu sprechen, wenn der Kreis grün wird. Bitte entspannen Sie ihre Gesichtsmuskeln und bitte vermeiden Sie Bewegungen (z.B. das Bewegen der Zunge) in der Vorbereitungsphase (also bevor der Kreis grün wird). Versuchen Sie die Lautstärke and Charakteristik (z.B. Tonhöhe) Ihres Lautes konstant zu halten.

        Im Falle der Instruktion „/xx/“ ist es Ihre Aufgabe darauf zu achten, wann der Kreis grün wird. Sie bleiben aber passiv, das heißt Sie produzieren keine Silbe und bereiten sich auch nicht darauf vor eine Silbe zu produzieren.

        Die Art der Instruktion ändert sich zufällig. Bitte beachten Sie die Instruktion genau und bleiben Sie so konzentriert wie möglich.

        Weiterhin werden in manchen Durchläufen Audioaufnahmen präsentiert, kurz bevor der Kreis grün wird. Konzentrieren Sie sich jedoch weiterhin auf den grün-werden des Kreises und ignorieren Sie die Aufnahmen so gut wie möglich.

        In regelmäßigen Abständen finden kurze Pausen statt. Bitte bleiben Sie während der Pause ruhig sitzen, sprechen Sie nicht und beachten Sie die Hinweise auf dem Monitor.

        Bei Fragen geben Sie bitte jetzt der Versuchsleitung Bescheid.
    KeyboardComponent instruction_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    RoutineSettingsComponent ISI
      stopVal [duration (s)] = random.randint(500, 1500)/1000
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    PolygonComponent fixation_cross_ISI
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ParallelOutComponent fixation_cross_port
      address = 0x3ff8
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = True
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  Routine pause
    RoutineSettingsComponent pause
      skipIf = $skip_pause == 1 
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    KeyboardComponent pause_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent pause_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Kurze Pause.

        Sie können nun kurz pausieren.

        Bitte sprechen und bewegen Sie sich NICHT!

        Die Versuchsleitung wid zu Ihnen sprechen und Ihnen weitere Informationen mitteilen.
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Das Ende des Experiments ist erreicht.

        Bitte bleiben Sie ruhig sitzen und sprechen Sie NICHT.

        Die Versuchsleitung wird Sie über den weiteren Verlauf aufklären.

        Vielen Dank für Ihrer Teilnahme!
Flow
  Routine welcome
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $conditionsFileName
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'probe': 'Yes', 'task': 'Active', 'probe_onset_cat': 'Early', 'probe_type': 'Normal', 'probe_onset': 2.8, 'probe_intensity': 1, 'stim_file': 'C:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\BIDS\\stimuli\\sub-99\\sub-99_normal_probe.wav', 'probe_duration': 0.08, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Active', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Passive', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Active', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'No', 'task': 'Passive', 'probe_onset_cat': None, 'probe_type': None, 'probe_onset': 0, 'probe_intensity': 0, 'stim_file': None, 'probe_duration': 0, 'subj': 'sub-99'},
        {'probe': 'Yes', 'task': 'Active', 'probe_onset_cat': 'Late', 'probe_type': 'Normal', 'probe_onset': 2.9, 'probe_intensity': 1, 'stim_file': 'C:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\BIDS\\stimuli\\sub-99\\sub-99_normal_probe.wav', 'probe_duration': 0.08, 'subj': 'sub-99'}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
      Routine ISI
      Routine trial
    LoopTerminator trials
    Routine pause
  LoopTerminator blocks
  Routine end
