PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tid_psam_audiotest1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 2
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    ParallelOutComponent p_port
      address = 0x3ff8
      register = EIO
      startData = 1
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import psychtoolbox as ptb
      Begin Experiment:
        sound_2 = sound.Sound("test_rect_44100fs_80ms_2ch.wav", sampleRate = 44100)
      Begin Routine:
        curt = ptb.GetSecs()+0.5

        sound_2.play(when=curt)

        p_port.setData(4)
      End Routine:
        sound_2.stop()
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
  LoopTerminator trials
