PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = tid_psam_audiotest7
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import sound

        # Create a sound object (440 Hz tone, 0.5 seconds duration)
        beep = sound.Sound(440, secs=0.5)
      Begin Routine:
        # Play the sound at the start of the routine
        beep.play()
      End Routine:
        # Stop the sound to ensure it doesn't continue playing
        beep.stop()
Flow
  Routine trial
