PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tid_psam_testing
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 10
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    SoundComponent sound_1
      disabled = True
      sound [set every repeat] = stereo_sine_wave.wav
      speakerIndex = 21.0
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    ParallelOutComponent p_port
      address = 0x3ff8
      register = EIO
      startData = 1
      startVal [time (s)] = 1
      stopData = 0
      stopVal [duration (s)] = 1
      syncScreen = True
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
