PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    MicrophoneComponent mic
      channels = stereo
      device = 28
      maxSize = 24000
      outputType = default
      sampleRate = CD Audio (44.1kHz)
      speakTimes = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = none
      transcribeLang = en-US
      transcribeWhisperDevice = auto
      transcribeWhisperModel = base
      trimSilent = False
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    SoundComponent sound_1
      sound [set every repeat] = A
      speakerIndex = 23.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine test
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine test_laptop
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = test laptop
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Flow
  Routine test
  Routine trial
  Routine test_laptop
